PsychoPy2experiment version="2021.1.4"
Settings
  Data filename = 'data/%s_%s_%s' % (expInfo['Participant'], expName, expInfo['date'])
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = norm
  Window size (pixels) = [1280, 720]
  expName = Numerosity_Comparison_GR
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Routines
  Routine trial
    CodeComponent cursor_hide
      Code Type = JS
      Begin JS Experiment:
        document.body.style.cursor='none'
      Begin JS Routine:
        document.body.style.cursor='none'
    TextComponent fixation_cross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = +
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    ImageComponent Dots_1
      image [set every repeat] = $Stim1
      interpolate = nearest
      pos = (-0.45, 0)
      size = (0.7, 0.7)
      startVal [time (s)] = 1.0
      units = height
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    ImageComponent Dots_2
      image [set every repeat] = $Stim2
      interpolate = nearest
      pos = (+0.45, 0)
      size = (0.7, 0.7)
      startVal [time (s)] = 1.0
      units = height
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    KeyboardComponent key_resp
      allowedKeys = 'f','j'
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine feedback
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.corr == 1: #stored on last run routine
            msg = "Juist!"
        else:
            msg = "Oeps! Dat was fout"
    TextComponent Feedback
      color [set every repeat] = white
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $msg
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  Routine instr_main
    TextComponent Instr_main
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      wrapWidth = 1
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      text:
        Nu zal het hoofd experiment beginnen.

        De taak is hetzelfde:
        je zult twee sets van stippen zien verschijnen op het scherm.
        Jou taak is om te beoordelen welke het
        GROOTSTE AANTAL STIPPEN HEEFT.

        Hint: hou je ogen op het centrale witte kruis!

        Druk op SPATIE om verder te gaan.
    KeyboardComponent Space_to_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine final_screen
    TextComponent Thanks
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Dit is het einde van het experiment!

        Dankje voor je medewerking!
  Routine instr_train
    TextComponent Instr_training
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        We zullen starten met een korte training om de taak te begrijpen.

        Je zult twee sets van stippen zien verschijnen op het scherm.
        Jou taak is om te beoordelen welke het
        GROOTSTE AANTAL STIPPEN HEEFT.

        Hint: hou je ogen op het centrale witte kruis!

        Druk op SPATIE om verder te gaan.
    KeyboardComponent end_instr_training
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Welcome
    TextComponent Welcome_
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Welkom bij het experiment!

        Lees de instructies zorgvuldig alstublieft.

        Druk op SPATIE om verder te gaan.
    KeyboardComponent end_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_train2
    TextComponent Resp_explain
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Druk op de toets ‘f’ als je denkt dat de LINKER set groter is.

        Druk op de toets ‘j’ als je denkt dat de RECHTER set groter is.

        Probeer zo snel en accuraat als je kan te antwoorden.

        Je zal feedback krijgen van je antwoord (juist/fout).

        Als je klaar bent om te oefenen, druk op SPATIE.
    KeyboardComponent end_explain
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_main2
    TextComponent resp_expl2_main
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Druk op de toets ‘f’ als je denkt dat de LINKER set groter is.

        Druk op de toets ‘j’ als je denkt dat de RECHTER set groter is.

        Probeer zo snel en accuraat als je kan te antwoorden.

        Deze keer, zal je geen feedback krijgen.

        Als je klaar bent om te oefenen, druk op SPATIE.
    KeyboardComponent start_the_exp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine break_
    CodeComponent break_192
      Code Type = Auto->JS
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      Begin Experiment:
        n_test_trials = 0
      Begin Routine:
        n_test_trials = n_test_trials+1
      Each Frame:
        if n_test_trials % 192 != 0:
           continueRoutine = False
    TextComponent take_break
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        You can take a break!



        Press SPACE to continue the experiment.
    KeyboardComponent key_resp_2
      allowedKeys = 'space' 
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_end
    TextComponent ending
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Dit is het einde van het experiment!

        Voor verdere informatie,
        kan je marta.fedele@kuleuven.be contacteren.

        Druk op SPATIE om verder te gaan.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Example
    ImageComponent one
      image = $Stim1
      pos = (-0.3, 0.3)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent two
      image = $Stim2
      pos = (+0.3, +0.3)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent exp
      letterHeight = 0.12
      pos = (0, 0.7)
      startVal [time (s)] = 0.0
      text = Example
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    KeyboardComponent goahead
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Welcome
  Routine instr_train
  Routine instr_train2
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = Num_Comp_GR_practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Stim1': 'stimuli/13_10_1_n1.bmp', 'Stim2': 'stimuli/13_12_1_n2.bmp', 'S1': '13_10_1_n1.bmp', 'S2': '13_12_1_n2.bmp', 'Ratio': 1.2, 'N1': 10, 'N2': 12, 'Side_Larger': 'right', 'CorrAns': 'j', 'CH_N1': 51029, 'Density_N1': 0.024595, 'DotArea_N1': 1255.1, 'Diameter_N1': 11.8, 'DotCircumf_N1': 370.71, 'PairNumber_N1': 13, 'CH_N2': 134000, 'Density_N2': 0.05838, 'DotArea_N2': 7807.6, 'Diameter_N2': 28.417, 'DotCircumf_N2': 1071.3, 'PairNumber_N2': 13, 'CongruencyxSide': 1, 'Full': 1, 'Full_Congr': 1, 'Full_Incongr': 0, 'pair_n': 1},
      {'Stim1': 'stimuli/19_12_1_n1.bmp', 'Stim2': 'stimuli/19_15_1_n2.bmp', 'S1': '19_12_1_n1.bmp', 'S2': '19_15_1_n2.bmp', 'Ratio': 1.25, 'N1': 12, 'N2': 15, 'Side_Larger': 'right', 'CorrAns': 'j', 'CH_N1': 44407, 'Density_N1': 0.028351, 'DotArea_N1': 1259, 'Diameter_N1': 10.917, 'DotCircumf_N1': 411.55, 'PairNumber_N1': 19, 'CH_N2': 116000, 'Density_N2': 0.10337, 'DotArea_N2': 11988, 'Diameter_N2': 31.733, 'DotCircumf_N2': 1495.4, 'PairNumber_N2': 19, 'CongruencyxSide': 1, 'Full': 1, 'Full_Congr': 1, 'Full_Incongr': 0, 'pair_n': 1},
      {'Stim1': 'stimuli/229_10_7_n1.bmp', 'Stim2': 'stimuli/229_12_7_n2.bmp', 'S1': '229_10_7_n1.bmp', 'S2': '229_12_7_n2.bmp', 'Ratio': 1.2, 'N1': 10, 'N2': 12, 'Side_Larger': 'right', 'CorrAns': 'j', 'CH_N1': 87155, 'Density_N1': 0.039912, 'DotArea_N1': 3478.5, 'Diameter_N1': 20.5, 'DotCircumf_N1': 644.03, 'PairNumber_N1': 229, 'CH_N2': 63517, 'Density_N2': 0.02175, 'DotArea_N2': 1381.5, 'Diameter_N2': 11.583, 'DotCircumf_N2': 436.68, 'PairNumber_N2': 229, 'CongruencyxSide': 7, 'Full': 1, 'Full_Congr': 0, 'Full_Incongr': 1, 'pair_n': 1},
      {'Stim1': 'stimuli/235_12_7_n1.bmp', 'Stim2': 'stimuli/235_15_7_n2.bmp', 'S1': '235_12_7_n1.bmp', 'S2': '235_15_7_n2.bmp', 'Ratio': 1.25, 'N1': 12, 'N2': 15, 'Side_Larger': 'right', 'CorrAns': 'j', 'CH_N1': 83254, 'Density_N1': 0.060348, 'DotArea_N1': 5024.2, 'Diameter_N1': 22.083, 'DotCircumf_N1': 832.52, 'PairNumber_N1': 235, 'CH_N2': 77229, 'Density_N2': 0.023594, 'DotArea_N2': 1822.1, 'Diameter_N2': 12.133, 'DotCircumf_N2': 571.77, 'PairNumber_N2': 235, 'CongruencyxSide': 7, 'Full': 1, 'Full_Congr': 0, 'Full_Incongr': 1, 'pair_n': 1}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
    Routine trial
    Routine feedback
  LoopTerminator practice_trials
  Routine instr_main
  Routine instr_main2
  LoopInitiator test_trials loopType="TrialHandler"
    conditionsFile = Num_Comp_GR_test.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Stim1': 'stimuli/13_10_1_n1.bmp', 'Stim2': 'stimuli/13_12_1_n2.bmp', 'S1': '13_10_1_n1.bmp', 'S2': '13_12_1_n2.bmp', 'Ratio': 1.2, 'N1': 10, 'N2': 12, 'side_larger': 'right', 'CorrAns': 'j', 'CH_N1': 51029, 'Density_N1': 0.024595, 'DotArea_N1': 1255.1, 'Diameter_N1': 11.8, 'DotCircumf_N1': 370.71, 'PairNumber_N1': 13, 'CH_N2': 134000, 'Density_N2': 0.05838, 'DotArea_N2': 7807.6, 'Diameter_N2': 28.417, 'DotCircumf_N2': 1071.3, 'PairNumber_N2': 13, 'CongruencyxSide': 1, 'Full_Congr': 1, 'Full_Incongr': 0},
      {'Stim1': 'stimuli/14_15_1_n1.bmp', 'Stim2': 'stimuli/14_18_1_n2.bmp', 'S1': '14_15_1_n1.bmp', 'S2': '14_18_1_n2.bmp', 'Ratio': 1.2, 'N1': 15, 'N2': 18, 'side_larger': 'right', 'CorrAns': 'j', 'CH_N1': 62813, 'Density_N1': 0.027833, 'DotArea_N1': 1748.3, 'Diameter_N1': 11.867, 'DotCircumf_N1': 559.2, 'PairNumber_N1': 14, 'CH_N2': 132000, 'Density_N2': 0.09396, 'DotArea_N2': 12405, 'Diameter_N2': 29.444, 'DotCircumf_N2': 1665, 'PairNumber_N2': 14, 'CongruencyxSide': 1, 'Full_Congr': 1, 'Full_Incongr': 0},
      {'Stim1': 'stimuli/15_20_1_n1.bmp', 'Stim2': 'stimuli/15_24_1_n2.bmp', 'S1': '15_20_1_n1.bmp', 'S2': '15_24_1_n2.bmp', 'Ratio': 1.2, 'N1': 20, 'N2': 24, 'side_larger': 'right', 'CorrAns': 'j', 'CH_N1': 72952, 'Density_N1': 0.034139, 'DotArea_N1': 2490.5, 'Diameter_N1': 11.85, 'DotCircumf_N1': 744.56, 'PairNumber_N1': 15, 'CH_N2': 158000, 'Density_N2': 0.10833, 'DotArea_N2': 17157, 'Diameter_N2': 29.875, 'DotCircumf_N2': 2252.5, 'PairNumber_N2': 15, 'CongruencyxSide': 1, 'Full_Congr': 1, 'Full_Incongr': 0},
      {'Stim1': 'stimuli/19_12_1_n1.bmp', 'Stim2': 'stimuli/19_15_1_n2.bmp', 'S1': '19_12_1_n1.bmp', 'S2': '19_15_1_n2.bmp', 'Ratio': 1.25, 'N1': 12, 'N2': 15, 'side_larger': 'right', 'CorrAns': 'j', 'CH_N1': 44407, 'Density_N1': 0.028351, 'DotArea_N1': 1259, 'Diameter_N1': 10.917, 'DotCircumf_N1': 411.55, 'PairNumber_N1': 19, 'CH_N2': 116000, 'Density_N2': 0.10337, 'DotArea_N2': 11988, 'Diameter_N2': 31.733, 'DotCircumf_N2': 1495.4, 'PairNumber_N2': 19, 'CongruencyxSide': 1, 'Full_Congr': 1, 'Full_Incongr': 0}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
    Routine trial
  LoopTerminator test_trials
  Routine final_screen
