PsychoPy2experiment version="2022.1.2"
Settings
  Experiment info = {'Circle_Num': '175', 'participant': ''}
  Full-screen window = True
  Monitor = default
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = List
  keyboardBackend = ioHub
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Routines
  Routine ISI
    TextComponent ISI_text_before_response
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        # the background Circle and ISI position - for randomization
        # we use it here becouse we want the fixation pos will be sync with the Trial circle

        '''
        this routine doesnot work couse i wanted it to  not have a fixation
        but the var must be coded couse it wont work othewise
        '''
        Base_Circle_Pos = random()*0.5-0.25
        ISI_text_before_response.setPos((Base_Circle_Pos, 0))
  Routine ISI_2
    TextComponent Test_ISI_2
      durationEstim = 1.5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()+1
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    CodeComponent code_5
      Code Type = Auto->JS
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      End Routine:
        StimOver = False
  Routine Stim1
    PolygonComponent Background_Circle_Stim_1
      fillColor = white
      nVertices = 100
      saveStartStop = False
      shape = regular polygon...
      size = (0.9, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        Stim1_Pic_List = []
      Begin Routine:
        #Creating a lists for the stim1 circles
        circle_Stim_1_list = []
        circle_Stim_1_list_Size = []
        circle_Stim_1_list_Pos = []

        #create a random number of between 5 to 11 circles in one round
        nStim1 = randint(5, 11)

        # as long as the circle list is not full with 'nStim1' circles it append circles
        while len(circle_Stim_1_list) < nStim1:
            #sizerand is a random number for the size of the circle
            sizerand = random()*0.1+0.05
            #pos_rand(X, Y) is a random number for the postion of the circle
            pos_randX = random()*0.9-0.45
            pos_randY = random()*0.9-0.45
            polygon = visual.Polygon(
                      win=win, name='polygon',
                      edges=100, size=(sizerand),
                      ori=0.0, pos=(pos_randX, pos_randY),
                      lineWidth=1.0,     colorSpace='rgb',  lineColor='white', fillColor='black',
                      opacity=None, depth=-1.0, interpolate=True)
            # the overlaps method for all circles not overlap each other
            overlap = False
            for circle in circle_Stim_1_list:
                if circle.overlaps(polygon):
                   overlap = True
            # the is inside method for all circles get inside the background circle
            isInside = insideCircle(Background_Circle_Stim_1, polygon)
            if not overlap and isInside:
               # append data for analsys and operations
               circle_Stim_1_list.append(polygon)
               circle_Stim_1_list_Size.append(polygon.size[0])
               circle_Stim_1_list_Pos.append(polygon.pos)

        # make the circles in 'circle_Stim_1_list' show up once just if the list is full with 'nStim1' circles
        if len(circle_Stim_1_list) == nStim1:
            for circle in circle_Stim_1_list:
                circle.setAutoDraw(True)
      End Routine:
        #at the end of the routine make the circles in 'circle_Stim_1_list' disapeare
        for circle in circle_Stim_1_list:
            circle.setAutoDraw(False)

        # create some var's to get inside the excel file
        numStim1 = len(circle_Stim_1_list)
        sizeStim1 = circle_Stim_1_list_Size
        posStim1 = circle_Stim_1_list_Pos
        sumStim1 = sum(circle_Stim_1_list_Size)

        # add the var's inside excel file
        thisExp.addData('numStim01', numStim1)
        thisExp.addData('sizeStim01', sizeStim1)
        thisExp.addData('posStim01', posStim1)
        thisExp.addData('sumStim01', sumStim1)

        # vars for stim1 pic
        Stim1_Pic_List.append(1)
        Stim1_Pic_Num = len(Stim1_Pic_List)
        Stim1_Pic_Num_Text = 'Stim1_Pic_Num_{}.png'.format(Stim1_Pic_Num)

        # get a pic
        win.getMovieFrame()
        win.saveMovieFrames(Stim1_Pic_Num_Text)
  Routine Stim2
    PolygonComponent Background_Circle_Stim_2
      fillColor = white
      nVertices = 100
      saveStartStop = False
      shape = regular polygon...
      size = (0.9, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.4
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        # list for cerating a pics at the end of the experiment
        Stim2_Pic_List = []
      Begin Routine:
        #Creating a lists for the stim2 circles
        circle_Stim_2_list = []
        circle_Stim_2_list_Size = []
        circle_Stim_2_list_Pos = []

        #create a random number of between 5 to 11 circles in one round
        nStim2 = randint(5, 11)

        # as long as the circle list is not full with 'nStim2' circles it append circles
        while len(circle_Stim_2_list) < nStim2:
            #sizerand is a random number for the size of the circle
            sizerand = random()*0.1+0.05

            #pos_rand(X, Y) is a random number for the postion of the circle
            pos_randX = random()*0.9-0.45
            pos_randY = random()*0.9-0.45


            polygon = visual.Polygon(
                      win=win, name='polygon',
                      edges=100, size=(sizerand, sizerand),
                      ori=0.0, pos=(random()*0.9-0.45, random()*0.9-0.45),
                      lineWidth=1.0,     colorSpace='rgb',  lineColor='white', fillColor='black',
                      opacity=None, depth=-1.0, interpolate=True)

            # we using two overlap methods becouse we checking every circle with two lists - circle_Stim_2_list and circle_Stim_1_list
            overlap = False
            overlap_2 = False
            for circle in circle_Stim_1_list:
                if circle.overlaps(polygon):
                   overlap = True
            for circle in circle_Stim_2_list:
                if circle.overlaps(polygon):
                   overlap_2 = True
            # the is inside method for all circles get inside the background circle
            isInside = insideCircle(Background_Circle_Stim_2, polygon)
            if not overlap and not overlap_2 and isInside:
              # append data for analsys and operations
              circle_Stim_2_list.append(polygon)
              circle_Stim_2_list_Size.append(polygon.size[0])
              circle_Stim_2_list_Pos.append(polygon.pos)

        # make the circles in 'circle_Stim_2_list' show up once just if the list is full with 'nStim2' circles
        if len(circle_Stim_2_list) == nStim2:
            for circle in circle_Stim_2_list:
                circle.setAutoDraw(True)
      End Routine:
        #at the end of the routine make the circles in 'circle_Stim_2_list' disapeare
        for circle in circle_Stim_2_list:
            circle.setAutoDraw(False)

        # create some var's to get inside the excel file
        numStim2 = len(circle_Stim_2_list)
        sizeStim2 = circle_Stim_2_list_Size
        posStim2 = circle_Stim_2_list_Pos
        sumStim2 = sum(circle_Stim_2_list_Size)

        # add the var's inside excel file
        thisExp.addData('numStim02', numStim2)
        thisExp.addData('sizeStim02', sizeStim2)
        thisExp.addData('posStim02', posStim2)
        thisExp.addData('sumStim02', sumStim2)

        # vars for stim1 pic
        Stim2_Pic_List.append(1)
        Stim2_Pic_Num = len(Stim2_Pic_List)
        Stim2_Pic_Num_Text = 'Stim2_Pic_Num_{}.png'.format(Stim2_Pic_Num)

        # get a pic
        win.getMovieFrame()
        win.saveMovieFrames(Stim2_Pic_Num_Text)

        #clear all data from lists:
        circle_Stim_1_list.clear()
        circle_Stim_1_list_Size.clear()
        circle_Stim_1_list_Pos.clear()
        circle_Stim_2_list.clear()
        circle_Stim_2_list_Size.clear()
        circle_Stim_2_list_Pos.clear()
  Routine initalizing
    CodeComponent initializing_defs
      Code Type = Auto->JS
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      Before Experiment:
        # custome overlaps def is checking if two circels are overlaps
        # this def will run thruout the full experiment
        def customOverlaps(a, b):
            ''' a custom function to detect overlap between circular objects
            Locally we can use psychopys inbuild overlaps method, this does not
            yet exist in psychoJS so we need a custom function for online use.

            input:
                a: a circular object with attributed pos and size
                b: a circular object with attributes pos and size'''
            pt1 = a.pos
            pt2 = b.pos

            sep = ((pt1[0]-pt2[0])**2+(pt1[1]-pt2[1])**2)**0.5

            # if the seperation is less than the sum of the radi
            if sep < a.size[0]/2 + b.size[0]/2:
                return True
            else:
                return False

        # insideCircles def is checking if  circle is inside a bigger backgound circle

        def insideCircle(circle1, circle2):
            '''
            circle1: larger circle
            circle2: smaller circle

            return: boolean true or false if smaller circle inside larger
            '''
            x1 = circle1.pos[0]
            y1 = circle1.pos[1]
            r1 = circle1.size[0]/2
            x2 = circle2.pos[0]
            y2 = circle2.pos[1]
            r2 = circle2.size[0]/2

            distSq = (((x1 - x2)* (x1 - x2))+ ((y1 - y2)* (y1 - y2)))**(.5)
            isInside = False
            if (distSq + r2 == r1):
                x = 1
            elif (distSq + r2 < r1):
                x = 2
                isInside = True
            else:
                x = 3
            return isInside
      Begin Experiment:
        import math
  Routine Response
    PolygonComponent Base_Circle
      colorSpace = hsv
      fillColor = $(0.0000, 0.0000, 0.5000)
      lineColor [set every repeat] = $Bcolor
      pos [set every repeat] = Base_Circle_Pos
      shape = custom polygon...
      size [set every repeat] = Base_Circle_Size
      startVal [time (s)] = 0.0
      units = height
      vertices = 100
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    KeyboardComponent response_key_resp
      allowedKeys = 'return'
      discard previous = False
      forceEndRoutine = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        #  list of number of rounds for pics name
        response_Pic_Num_List = []

        # the background Circle 2r size and pos in cm:
        Base_Circle_Size = 0.2564102564102564
        Base_Circle_Pos = (0, 0)
        Bcolor = (0.0000, 0.0000, 0.925)

        Sound_it = False
      Begin Routine:
        # creating a keyboard
        kb = keyboard.Keyboard()

        # creating some  lists for statistics and functions
        Circle_List = []

        # space function is addition for the first part of the experiment
        space_func = True

        Sound_it = False

        if sound_1 == FINISHED:
           continueRoutine = False

        Circle_Num = int(expInfo['Circle_Num'])
      Each Frame:
        # get the presses from keybaord and thier duration
        keys = kb.getKeys(['space', 'return'], waitRelease = False, clear=False)

        # the size of the circle for handeling randomizationg in cm
        Small_Circle_Size = 0.012820512820512822
        #Small_Circle_Size = Small_Circle_Size*1.1-random()*Small_Circle_Size*0.2

        # the position of the circle for handeling randomization
        Small_Circle_Pos_X = random()*Base_Circle_Size-Base_Circle_Size/2
        Small_Circle_Pos_Y = random()*Base_Circle_Size-Base_Circle_Size/2

        # show the circle on screen
        for circle in Circle_List:
            circle.setAutoDraw(True)

        # keyboard handeling
        for thisKey in keys:
          if len(Circle_List) == Circle_Num:
            Sound_it = True
          if len(Circle_List) < Circle_Num:
            if thisKey == 'space' and space_func:
                polygon = visual.Polygon(
                          win=win, name='polygon',units='height',
                          edges=100, size=(Small_Circle_Size),
                          ori=0.0, pos=(Small_Circle_Pos_X, Small_Circle_Pos_Y),
                          lineWidth = 0,     colorSpace='rgb',  lineColor='white', fillColor='black',
                          opacity=None, depth=0.0, interpolate=True)
                overlap = False
                for circle in Circle_List:
                    if customOverlaps(circle, polygon):
                       overlap = True
                isInside = insideCircle(Base_Circle, polygon)
                if not overlap and isInside:
                   Circle_List.append(polygon)
                if thisKey.duration != None:
                   space_func = False
                   kb.getKeys(clear = True)
                   keys.clear()

            elif thisKey == 'space' and not space_func:
                if len(Circle_List) > 0:
                   Cir_Pop = Circle_List.pop()
                   Cir_Pop.setAutoDraw(False)
                if thisKey.duration != None:
                   space_func = True
                   kb.getKeys(clear = True)
                   keys.clear()
      End Routine:
        # def number of rounds for pic
        response_Pic_Num_List.append(1)
        Pic_Num = len(response_Pic_Num_List)
        Pic_Num_Text = '{}.png'.format(Pic_Num)

        #creating a pic
        win.getMovieFrame()
        win.saveMovieFrames(Pic_Num_Text)

        r2_size = []
        Positions = []
        sum_area = []
        for i in Circle_List:
            r2_size.append(i.size[0])
            Positions.append((i.pos[0], i.pos[1]))
            sum_area.append(((i.size[0]*0.5)**2)*math.pi)

        #zip the datat to one list:
        zipData = list(zip(r2_size, Positions))

        # adding important values to excle file
        thisExp.addData('nCircle', len(Circle_List))
        thisExp.addData('sum_area_Circle', sum(sum_area))
        thisExp.addData('r2_Circle_Sizes', r2_size)
        thisExp.addData('Circle_Pos', Positions)
        thisExp.addData('zipData', zipData)


        for Circle in Circle_List:
            Circle.setAutoDraw(False)
        print(Base_Circle.size)
    SoundComponent sound_1
      sound = A
      startVal [condition] = Sound_it == True
      stopVal [duration (s)] = 0.2
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    PolygonComponent polygon_2
      disabled = True
      fillColor = aqua
      shape = cross
      size = (1.2, 1.2)
      startVal [time (s)] = 0.0
      units = cm
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    TextComponent text
      disabled = True
      letterHeight = 1.25
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text = %
      units = cm
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    PolygonComponent polygon
      disabled = True
      fillColor = white
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = cm
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Flow
  Routine initalizing
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 20
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    Routine Response
  LoopTerminator trials_2
